<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration>
              <gl:Name>Waveform</gl:Name>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>Waveform</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms>
                <gl:UniformConfiguration xsi:type="gl:Vec4Uniform">
                  <gl:Name>color</gl:Name>
                  <gl:Value>
                    <gl:X>1</gl:X>
                    <gl:Y>1</gl:Y>
                    <gl:Z>1</gl:Z>
                    <gl:W>1</gl:W>
                  </gl:Value>
                </gl:UniformConfiguration>
              </gl:ShaderUniforms>
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>waveform.vert</gl:VertexShader>
              <gl:GeometryShader>waveform.geom</gl:GeometryShader>
              <gl:FragmentShader>waveform.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Waveform</gl:ShaderName>
          <gl:MeshName>Waveform</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>44100</dsp:Count>
          <dsp:Skip>441</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>-20000</dsp:Min>
          <dsp:Max>20000</dsp:Max>
          <dsp:RangeMin>-1</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>UpdateSizeUniform</Name>
        <Description>Updates information about the number of channels and samples in the waveform visualizer.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Rows</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ShaderName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>rows</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cols</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>cols</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Rows,Cols</Selector>
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Rows" Selector="Item2" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Reshape">
          <dsp:Channels>0</dsp:Channels>
          <dsp:Rows>44100</dsp:Rows>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateVertexBuffer">
          <gl:MeshName>Waveform</gl:MeshName>
          <gl:DrawMode>LineStrip</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>1</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>